PsychoPy2experiment version="2026.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  HTML path = web
  Monitor = testMonitor
  Resources = ['condition_file_1.xlsx', 'rot60drwhoL.jpg', 'rot60drwhoR.jpg', 'rot110drwhoL.jpg', 'rot110drwhoR.jpg', 'rot160drwhoL.jpg', 'rot160drwhoR.jpg', 'rot200drwhoL.jpg', 'rot200drwhoR.jpg', 'rot250drwhoL.jpg', 'rot250drwhoR.jpg', 'rot300drwhoL.jpg', 'rot300drwhoR.jpg', 'stimuliLeft.png', 'stimuliRight.png']
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = MentalRotationFinal
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine blank
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    PolygonComponent polygon_centr
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine TrialSD
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    KeyboardComponent TrialSD_keyresp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent TrialSD_stimulus
      image [set every repeat] = $stimulifile
      pos = (0, -0.27)
      saveStartStop = False
      size = (0.08, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent TrialSD_image
      image [set every repeat] = $imagefile
      saveStartStop = False
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent TrialSD_text
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = нажмите '<=' для ДРУГОЕ         нажмите '=>' для ТО ЖЕ
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  Routine Hello
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    TextComponent helloText
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Дорогой испытуемый!

        Мы изучаем особенности пространственного мышления и хотим выяснить, как люди представляют людей и объекты под разными углами. В данном эксперименте вам предстоит увидеть ряд изображений и после каждого ответить на поставленные вопросы.
        Перед началом вы увидите подробную инструкцию и пример задачи.

        Чтобы продолжить, нажмите ПРОБЕЛ.
    KeyboardComponent helloKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Goodbye
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    TextComponent text_Ending
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Спасибо за участие в эксперименте!
        Обратитесь к экспериментатору для дальнейших инструкций.
    KeyboardComponent key_resp_Ending
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine InstructionLR
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    TextComponent exampTextLR
      color = black
      letterHeight = 0.035
      pos = [0, -0.25]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Вы увидите ряд изображений, на которых человек сидит за столом. Перед человеком в центре стола расположен прямоугольный планшет, и вокруг планшета расположены 4 точки справа, слева, спереди и сзади. При показе изображения одна из точек будет загораться.
        Вашей задачей будет определить, СЛЕВА или СПРАВА от планшета загорелась точка.
        Если точка СЛЕВА, нажмите клавишу “<=”. Если точка СПРАВА, нажмите клавишу “=>”.
        Когда будете готовы, нажмите клавишу ПРОБЕЛ.
    KeyboardComponent exampKeyLR
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent exampIm
      image = rot60drwhoL.jpg
      pos = [0.0, 0.15]
      saveStartStop = False
      size = [0.5,0.35]
      startVal [time (s)] = 0.0
      units = height
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  Routine InstructionMR
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    TextComponent InstMR_text
      letterHeight = 0.025
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Вы увидите ряд изображений, на которых человек сидит за столом. Перед человеком в центре стола расположен прямоугольный планшет, и вокруг планшета расположены 4 точки справа, слева, спереди и сзади.

        При показе изображения одна из точек будет загораться. Под изображением вам также будет схематично представлен пример зажигания точек.

        Вашей задачей будет определить как можно быстрее, СОВПАДАЕТ ЛИ ситуация на изображении с представленным примером.

        Если изображение и пример РАЗЛИЧАЮТСЯ, нажмите клавишу "<=”. Если они ОДИНАКОВЫЕ, нажмите клавишу “=>”.

        Для продолжения нажмите ПРОБЕЛ.
    KeyboardComponent InstMR_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent InstMR_image
      image = rot60drwhoL.jpg
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.5, 0.35)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent InstMR_stimulus
      image = stimuliLeft.png
      saveStartStop = False
      size = (0.08, 0.03)
      startVal [time (s)] = 0.0
      units = height
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  Routine InstructionQnA
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    TextComponent InstQnA_text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        После ответа на изображения вам нужно оценить, как вы решали задачу. В основном есть 2 типа решения задач: либо через мысленное "поворачивание объектов" до тех пор, пока не получится произвести сравнение, либо через "представление чужой точки зрения" и того, слева или справа по отношению к смотрящему находится зажженая точка.

        Если в задаче до вопроса вы определили сходство или различие, мысленно поворачивая объекты на столе до нужного угла, нажмите клавишу "<=”.
        Если вы определили сходство или различие, представляя себя на чужом месте, нажмите клавишу "=>”.
        Если ни один из вариантов не кажется правильным, нажмите клавишу "пробел".

        Далее вы потренируетесь на нескольких примерах. Если вы ознакомились с инструкцией, нажмите ПРОБЕЛ.
    KeyboardComponent InstQnA_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine TrialQnA
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    TextComponent TrialQnA_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Как вы решали?


        <= поворачивая объекты                представляя точку зрения=>
    KeyboardComponent TrialQnA_Ans
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TrialQnA_text2
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        другое
        ||
        v
  Routine InstTest
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    TextComponent InstTest_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Перед основной частью эксперимента вы потренируетесь на 4 задачах. Результаты этих задач не будут учитываться.
        Вам понадобятся клавиши: "<=", "=>", "пробел".

        Не торопитесь, убедитесь, что вы полностью понимаете, что вам нужно делать. Если у вас возникают вопросы, задавайте их экспериментатору.

        Если готовы приступить, нажмите ПРОБЕЛ.
    KeyboardComponent InstTest_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine InstBegin
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    TextComponent InstBegin_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Сейчас начнется основная часть эксперимента.
        Будьте внимательны, не отвлекайтесь.

        Чтобы начать, нажмите ПРОБЕЛ.
    KeyboardComponent InstBegin_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine TestTrialMR
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    KeyboardComponent TestTrialMR_keyresp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent TestTrialMR_stimulus
      image [set every repeat] = $stimulifile
      pos = (0, -0.27)
      saveStartStop = False
      size = (0.08, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent TestTrialMR_image
      image [set every repeat] = $imagefile
      saveStartStop = False
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent TestTrialMR_text
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = нажмите '<=' для ДРУГОЕ         нажмите '=>' для ТО ЖЕ
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  Routine TestTrialQnA
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    TextComponent TestTrialQnA_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Как вы решали?


        <= поворачивая объекты                представляя точку зрения=>
    KeyboardComponent TestTrialQnA_Ans
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent TestTrialQnA_text2
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        другое
        ||
        v
Flow
  Routine Hello
  Routine InstructionMR
  Routine InstructionQnA
  Routine InstTest
  LoopInitiator testTrials loopType="TrialHandler"
    Selected rows = 12:16
    conditionsFile = condition_file_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imagefile': 'rot60drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 60, 'testimagefile': 'rot60drwhoL.jpg', 'teststimulifile': 'stimuliLeft.png'},
      {'imagefile': 'rot60drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 60, 'testimagefile': 'rot160drwhoR.jpg', 'teststimulifile': 'stimuliRight.png'},
      {'imagefile': 'rot110drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 110, 'testimagefile': 'rot300drwhoR.jpg', 'teststimulifile': 'stimuliLeft.png'},
      {'imagefile': 'rot110drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 110, 'testimagefile': 'rot200drwhoL.jpg', 'teststimulifile': 'stimuliRight.png'},
      {'imagefile': 'rot160drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 160, 'testimagefile': None, 'teststimulifile': None},
      {'imagefile': 'rot160drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 160, 'testimagefile': None, 'teststimulifile': None},
      {'imagefile': 'rot200drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 200, 'testimagefile': None, 'teststimulifile': None},
      {'imagefile': 'rot200drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 200, 'testimagefile': None, 'teststimulifile': None},
      {'imagefile': 'rot250drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 250, 'testimagefile': None, 'teststimulifile': None}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
    Routine TestTrialMR
    Routine blank
    Routine TestTrialQnA
    Routine blank
  LoopTerminator testTrials
  Routine InstBegin
  LoopInitiator loopSD loopType="TrialHandler"
    conditionsFile = condition_file_2.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'imagefile': 'rot60drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 60},
      {'imagefile': 'rot60drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 60},
      {'imagefile': 'rot110drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 110},
      {'imagefile': 'rot110drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 110},
      {'imagefile': 'rot160drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 160},
      {'imagefile': 'rot160drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 160},
      {'imagefile': 'rot200drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 200},
      {'imagefile': 'rot200drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 200},
      {'imagefile': 'rot250drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 250},
      {'imagefile': 'rot250drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 250},
      {'imagefile': 'rot300drwhoL.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'right', 'angle': 300},
      {'imagefile': 'rot300drwhoR.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'right', 'angle': 300},
      {'imagefile': 'rot60drwhoL.jpg', 'stimulifile': 'stimuliRight.png', 'corrAns': 'left', 'angle': 60},
      {'imagefile': 'rot60drwhoR.jpg', 'stimulifile': 'stimuliLeft.png', 'corrAns': 'left', 'angle': 60}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
    Routine TrialSD
    Routine blank
    Routine TrialQnA
    Routine blank
  LoopTerminator loopSD
  Routine Goodbye
